'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 2
' Initial_Processdelay           = 1000000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = PittQLabSys
'<Header End>
'
' ODMR Counter Script with FM Modulation
' This script enables counting on counter 1 for ODMR experiments with optional laser power tracking
' and analog output control for FM modulation of the SG384 microwave generator.
'
' SG384 FM Input Specifications:
' - Voltage Range: ±1V for ± full deviation
' - Input Impedance: 100 kΩ
' - Input Coupling: AC (4 Hz high pass) or DC
' - Modulation Bandwidth: >100 kHz
' - Connector: Rear-panel BNC
'
' Parameters:
' Par_1  - Counter value (read)
' Par_2  - Integration time in microseconds (set by experiment)
' Par_3  - Laser power analog input (read from AI1)
' Par_4  - Number of samples to average (set by experiment)
' Par_5  - Current sample index
' Par_6  - Summed counts for averaging
' Par_7  - Summed laser power for averaging
' Par_8  - Final averaged counts (output)
' Par_9  - Final averaged laser power (output)
' Par_10 - Enable laser power tracking (0=disabled, 1=enabled)
' Par_11 - Enable FM modulation (0=disabled, 1=enabled)
' Par_12 - FM modulation frequency in Hz (set by experiment)
' Par_13 - FM modulation amplitude in volts (0-1V for SG384, set by experiment)
' Par_14 - Current FM phase (internal)
'
' Analog Outputs:
' AO1 - FM modulation signal for SG384
' AO2 - Reserved for future use

#Include ADwinGoldII.inc

DIM sample_index AS LONG
DIM integration_cycles AS LONG
DIM cycle_count AS LONG
DIM fm_phase AS FLOAT
DIM fm_step AS FLOAT
DIM fm_amplitude AS FLOAT
DIM fm_frequency AS FLOAT

init:
  ' Initialize counter
  Cnt_Enable(0)   ' Disable counter
  Cnt_Clear(1)    ' Clear counter 1
  Cnt_Mode(1,8)   ' Set counter 1 to increment on falling edge
  Cnt_Enable(1)   ' Enable counter 1
  
  ' Initialize analog input for laser power tracking
  AI_Config(1, 0, 0, 0)  ' Configure AI1 for single-ended, ±10V range
  
  ' Initialize analog outputs
  AO_Config(1, 0, 0, 1)  ' Configure AO1 for ±1V range (SG384 FM input)
  AO_Config(2, 0, 0, 0)  ' Configure AO2 for ±10V range
  
  ' Initialize variables
  sample_index = 1
  integration_cycles = 0
  cycle_count = 0
  fm_phase = 0.0
  fm_step = 0.0
  fm_amplitude = 0.0
  fm_frequency = 0.0
  
  ' Reset averaging variables
  Par_6 = 0  ' Summed counts
  Par_7 = 0  ' Summed laser power
  
  ' Initialize FM modulation parameters
  IF (Par_11 = 1) THEN
    fm_frequency = Par_12  ' FM frequency in Hz
    fm_amplitude = Par_13  ' FM amplitude in volts
    ' Calculate phase step per cycle (assuming 1ms base delay)
    fm_step = 2.0 * 3.14159 * fm_frequency * 0.001  ' radians per ms
  ENDIF
  
Event:
  ' Generate FM modulation signal if enabled
  IF (Par_11 = 1) THEN
    ' Calculate FM signal: amplitude * sin(2*pi*f*t)
    AO_Write(1, fm_amplitude * SIN(fm_phase))
    fm_phase = fm_phase + fm_step
    ' Keep phase in reasonable range
    IF (fm_phase > 2.0 * 3.14159) THEN
      fm_phase = fm_phase - 2.0 * 3.14159
    ENDIF
    ' Store current phase for external monitoring
    Par_14 = fm_phase
  ELSE
    ' Set AO1 to 0V when FM is disabled
    AO_Write(1, 0.0)
  ENDIF
  
  ' Read counter value
  Par_1 = Cnt_Read(1)
  
  ' Read laser power if enabled
  IF (Par_10 = 1) THEN
    Par_3 = AI_Read(1)  ' Read AI1 for laser power
  ELSE
    Par_3 = 0
  ENDIF
  
  ' Accumulate data for averaging
  Par_6 = Par_6 + Par_1  ' Add counts to sum
  IF (Par_10 = 1) THEN
    Par_7 = Par_7 + Par_3  ' Add laser power to sum
  ENDIF
  
  ' Clear counter for next cycle
  Cnt_Clear(1)
  
  ' Check if we've completed the integration time
  integration_cycles = integration_cycles + 1
  IF (integration_cycles >= Par_2) THEN
    ' Integration time complete, check if we need to average
    IF (sample_index >= Par_4) THEN
      ' Calculate averages
      Par_8 = Par_6 / Par_4  ' Average counts
      IF (Par_10 = 1) THEN
        Par_9 = Par_7 / Par_4  ' Average laser power
      ELSE
        Par_9 = 0
      ENDIF
      
      ' Reset for next averaging cycle
      Par_6 = 0
      Par_7 = 0
      sample_index = 1
    ELSE
      ' Continue accumulating for averaging
      Inc(sample_index)
    ENDIF
    
    ' Reset integration cycle counter
    integration_cycles = 0
  ENDIF
  
  ' Update current sample index
  Par_5 = sample_index
  
Finish:
  ' Cleanup
  Cnt_Enable(0)  ' Disable counter
  AO_Write(1, 0.0)  ' Set FM output to 0V 