'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 1000000
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = Normal
' Version                        = 1
' ADbasic_Version                = 6.3.0
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = DUTTLAB8  Duttlab8\Duttlab
'<Header End>
'
' ODMR Sweep Counter Script for Enhanced ODMR Experiments (State Machine)
' Generates a triangle on DACx (default DAC1) and counts falling edges on Counter 1.
' Non-blocking handshake: PC clears Par_20 to release next sweep.
' State machine prevents Get_Par timeouts by doing small chunks per Event.
'
#Include ADwinGoldII.inc

' ===================== Exposed interface =====================
' From Python:
'   FPar_1 = Vmin [V]   (clamped to [-1, +1])
'   FPar_2 = Vmax [V]   (clamped to [-1, +1])
'   Par_1  = N_STEPS    (>=2)
'   Par_2  = SETTLE_US  (us)
'   Par_3  = DWELL_US   (us)
'   Par_4  = DAC_CH     (1..2)
'   Par_8  = CHUNK_US   (µs, default 200 if 0)
'   Par_10 = START      (1=run, 0=idle)
' To Python:
'   Data_1[] = counts per step (LONG)
'   Data_2[] = DAC digits per step (LONG)
'   Par_20   = 1 when sweep done (PC must clear to 0 to allow next sweep)
'   Par_21   = number of points in last sweep (2*N_STEPS-2)
'   Par_25   = heartbeat counter (increments every Event tick)
' ============================================================

' ---- helpers (typed return OK; no typed args) ----
Function VoltsToDigits(v) As Long
  VoltsToDigits = Round((v + 10.0) * 65535.0 / 20.0)
EndFunction

Function DigitsToVolts(d) As Float
  DigitsToVolts = (d * 20.0 / 65535.0) - 10.0
EndFunction

' clamp to [lo, hi]
Function Clamp(v, lo, hi) As Float
  IF (v < lo) THEN
    v = lo
  ENDIF
  IF (v > hi) THEN
    v = hi
  ENDIF
  Clamp = v
EndFunction

' ---- working vars ----
Dim n_steps, n_points, k      As Long
Dim dac_ch                    As Long
Dim settle_us, dwell_us       As Long
Dim old_cnt, new_cnt, diff   As Long
Dim vmin_dig, vmax_dig        As Long
Dim step_dig, pos             As Long
Dim vmin_clamped, vmax_clamped, t As Float

' ---- state machine vars ----
Dim state As Long
Dim settle_rem_us, dwell_rem_us, tick_us As Long

' ---- result buffers (1-based indexing) ----
Dim Data_1[100000] As Long     ' counts per step
Dim Data_2[100000] As Long     ' DAC digits per step

Init:
  ' default chunk 200 µs if Par_8 not set yet
  IF (Par_8 <= 0) THEN
    Par_8 = 200
  ENDIF
  Processdelay = Par_8 * 100   ' (10 ns units)

  ' Counter 1: clk/dir, count up on rising edges (DIR tied high)
  Cnt_Enable(0)
  Cnt_Clear(0001b)
  Cnt_Mode(1, 00000000b)   ' bit0=0 clk/dir, no inversions (count up)
  Cnt_SE_Diff(0000b)       ' single-ended
  Cnt_Enable(0001b)

  ' Watchdog (debug-friendly: 5 s). Keep Reset calls in code.
  Watchdog_Init(1, 500000, 1111b)   ' time units = 10 µs

  ' Initialize state machine
  state = 0

  ' Handshake init
  Par_20 = 0
  Par_21 = 0
  Par_25 = 0
  old_cnt = 0

Event:
  ' ---- heartbeat & tick ----
  hb_div = hb_div + 1
  IF (hb_div >= 10) THEN         ' update heartbeat every ~10 ticks
    Par_25 = Par_25 + 1
    hb_div = 0
  ENDIF

  tick_us = Processdelay / 100   ' 10 ns -> µs
  IF (tick_us <= 0) THEN
    tick_us = 1                  ' never allow zero tick
  ENDIF

  Par_26 = state                 ' live: which CASE we are in

  ' ---- idle gate ----
  IF (Par_10 = 0) THEN
    state = 0
  ELSE

    SelectCase state

      Case 0        ' START SWEEP (only when Par_20 == 0)
        IF (Par_20 <> 0) THEN
          state = 90
        ELSE
          ' snapshot basic params
          n_steps   = Par_1
          IF (n_steps < 2) THEN
            n_steps = 2
          ENDIF
          settle_us = Par_2
          dwell_us  = Par_3

          ' clamp DAC ch (nested IF, no ELSEIF)
          IF (Par_4 < 1) THEN
            dac_ch = 1
          ELSE
            IF (Par_4 > 2) THEN
              dac_ch = 2
            ELSE
              dac_ch = Par_4
            ENDIF
          ENDIF

          vmin_clamped = Clamp(FPar_1, -1.0, 1.0)
          vmax_clamped = Clamp(FPar_2, -1.0, 1.0)
          IF (vmin_clamped > vmax_clamped) THEN
            t = vmin_clamped
            vmin_clamped = vmax_clamped
            vmax_clamped = t
          ENDIF

          vmin_dig = VoltsToDigits(vmin_clamped)
          vmax_dig = VoltsToDigits(vmax_clamped)
          IF (vmin_dig = vmax_dig) THEN
            n_steps = 2
          ENDIF

          n_points = (2 * n_steps) - 2
          IF (n_points < 2) THEN
            n_points = 2
          ENDIF
          Par_21 = n_points

          k = 0
          state = 20
        ENDIF

      Case 20     ' PREP STEP: compute DAC code; start settle window
        ' triangle index
        IF (k < n_steps) THEN
          pos = k
        ELSE
          pos = (2 * n_steps) - 2 - k
        ENDIF

        ' code for this step
        IF (n_steps > 1) THEN
          step_dig = ((vmax_dig - vmin_dig) * pos) / (n_steps - 1)
        ELSE
          step_dig = 0
        ENDIF
        Data_2[k+1] = vmin_dig + step_dig
        
        ' bounds check for DAC digits (should be 0-65535)
        IF (Data_2[k+1] < 0) THEN
          Data_2[k+1] = 0
        ENDIF
        IF (Data_2[k+1] > 65535) THEN
          Data_2[k+1] = 65535
        ENDIF

        ' output
        Write_DAC(dac_ch, Data_2[k+1])
        Start_DAC()

        ' initialize timers
        settle_rem_us = settle_us
        dwell_rem_us  = dwell_us
        state = 30

      Case 30     ' SETTLE (excluded from counting)
        IF (settle_rem_us > 0) THEN
          IF (settle_rem_us > tick_us) THEN
            settle_rem_us = settle_rem_us - tick_us
          ELSE
            settle_rem_us = 0
          ENDIF
        ELSE
          state = 40
        ENDIF

      Case 40     ' LATCH BASELINE
        Cnt_Latch(0001b)
        old_cnt = Cnt_Read_Latch(1)
        state = 50

      Case 50     ' DWELL (counting window)
        IF (dwell_rem_us > 0) THEN
          IF (dwell_rem_us > tick_us) THEN
            dwell_rem_us = dwell_rem_us - tick_us
          ELSE
            dwell_rem_us = 0
          ENDIF
        ELSE
          state = 60
        ENDIF

      Case 60     ' LATCH END + STORE DELTA
        Cnt_Latch(0001b)
        new_cnt = Cnt_Read_Latch(1)
        diff = new_cnt - old_cnt   ' LONG math handles wrap
        IF (diff < 0) THEN
          diff = -diff
        ENDIF
        Data_1[k+1] = diff

        state = 70

      Case 70     ' ADVANCE
        k = k + 1
        IF (k >= n_points) THEN
          Par_20 = 1     ' ready
          state  = 90
        ELSE
          state = 20
        ENDIF

      Case 90     ' WAIT FOR PC
        ' no sleeps; just yield this tick
        ' allow PC to clear Par_20
        IF (Par_20 = 0) THEN
          state = 0
        ENDIF

      CaseElse
        state = 0

    EndSelect
  ENDIF

End

Finish:
  ' Mark stopped and clear handshake
  Par_10 = 0
  Par_20 = 0

  ' Disable counter(s) and clear counter 1
  Cnt_Enable(0)
  Cnt_Clear(0001b)

  ' Park DAC channel at 0 V (center)
  IF (Par_4 < 1) THEN
    dac_ch = 1
  ELSE
    IF (Par_4 > 2) THEN
      dac_ch = 2
    ELSE
      dac_ch = Par_4
    ENDIF
  ENDIF
  Write_DAC(dac_ch, VoltsToDigits(0.0))
  Start_DAC()

  ' Reset internal state (optional but tidy)
  state = 0
  k = 0
  Par_21 = 0

  Exit